<CompuCell3D Revision="20141124" Version="3.7.3">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="1"/>
      <Steps>50000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <LatticeType>Hexagonal</LatticeType>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="CancerStemCell"/>
      <CellType TypeId="2" TypeName="Differentiated"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="CancerStemCell">10.0</Energy>
      <Energy Type1="Medium" Type2="Differentiated">10.0</Energy>
      <Energy Type1="CancerStemCell" Type2="CancerStemCell">10.0</Energy>
      <Energy Type1="CancerStemCell" Type2="Differentiated">10.0</Energy>
      <Energy Type1="Differentiated" Type2="Differentiated">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="100" y="100" z="0"/>
         <Radius>5</Radius>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>CancerStemCell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
